PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = cueing_task_exp
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
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    TextComponent cue_text
      letterHeight = 0.10
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 0.8
      text [set every repeat] = $cue_arrow
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    PolygonComponent target
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      pos [set every repeat] = (target_x,0)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 1.1
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    KeyboardComponent key_resp
      allowedKeys = 'right','left'
      correctAns = $corr_Ans
      forceEndRoutine = True
      startVal [time (s)] = 1.1
      storeCorrect = True
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  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!
        Keep your eyes focused on fixation cross '+' for the entire experiment.
        A target will appear on either the left or the right.

        If the target appears on the LEFT, press the 'left' key.
        If the target appears on the RIGHT, press the 'right' key.

        Please respond as quickly and as accurately as you can.
        Press the SPACE bar to begin.
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thankyou
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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      text:
        End of experiment.
        Thank you for participating!
Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_file.xlsx
    loopType = random
    nReps = 40
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    conditions:
      [{'cue_arrow': '→', 'target_x': 0.5, 'condition': 'valid', 'corr_Ans': 'right'},
      {'cue_arrow': '←', 'target_x': -0.5, 'condition': 'valid', 'corr_Ans': 'left'},
      {'cue_arrow': '→', 'target_x': 0.5, 'condition': 'valid', 'corr_Ans': 'right'},
      {'cue_arrow': '→', 'target_x': 0.5, 'condition': 'valid', 'corr_Ans': 'right'},
      {'cue_arrow': '←', 'target_x': -0.5, 'condition': 'valid', 'corr_Ans': 'left'},
      {'cue_arrow': '←', 'target_x': -0.5, 'condition': 'valid', 'corr_Ans': 'left'},
      {'cue_arrow': '←', 'target_x': -0.5, 'condition': 'valid', 'corr_Ans': 'left'},
      {'cue_arrow': '→', 'target_x': 0.5, 'condition': 'valid', 'corr_Ans': 'right'},
      {'cue_arrow': '→', 'target_x': -0.5, 'condition': 'invalid', 'corr_Ans': 'left'},
      {'cue_arrow': '←', 'target_x': 0.5, 'condition': 'invalid', 'corr_Ans': 'right'}]
    Routine trial
  LoopTerminator trials
  Routine thankyou
