PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = delay_discounting_exp
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or " + " GBP " + str(future_reward) + " after "+ str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 10, 'future_reward': 20, 'delay': 33},
      {'reward_today': 11, 'future_reward': 51, 'delay': 64},
      {'reward_today': 81, 'future_reward': 90, 'delay': 12},
      {'reward_today': 76, 'future_reward': 100, 'delay': 205},
      {'reward_today': 52, 'future_reward': 96, 'delay': 8},
      {'reward_today': 98, 'future_reward': 300, 'delay': 45},
      {'reward_today': 6, 'future_reward': 51, 'delay': 73},
      {'reward_today': 13, 'future_reward': 60, 'delay': 27},
      {'reward_today': 50, 'future_reward': 98, 'delay': 182},
      {'reward_today': 5, 'future_reward': 30, 'delay': 68},
      {'reward_today': 80, 'future_reward': 101, 'delay': 14},
      {'reward_today': 12, 'future_reward': 99, 'delay': 90},
      {'reward_today': 21, 'future_reward': 31, 'delay': 35},
      {'reward_today': 18, 'future_reward': 90, 'delay': 142},
      {'reward_today': 79, 'future_reward': 80, 'delay': 77},
      {'reward_today': 60, 'future_reward': 97, 'delay': 58},
      {'reward_today': 63, 'future_reward': 75, 'delay': 19},
      {'reward_today': 52, 'future_reward': 86, 'delay': 243},
      {'reward_today': 24, 'future_reward': 50, 'delay': 101},
      {'reward_today': 38, 'future_reward': 60, 'delay': 4}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
    Routine trial
  LoopTerminator trials
